---
API: 2.1
OpenSesame: 3.3.10
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title LineMotionExp2
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Local/OpenSesame/LineMotion"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#c0c0c0"

define sketchpad Display1
	set start_response_interval no
	set reset_variables no
	set duration "[Dis1_Dur]"
	set description "Displays stimuli"
	draw image center=1 file="[Dis1_T1]" scale=1 show_if=always x="[Dis1_T1X]" y="[Dis1_T1Y]" z_index=0
	draw image center=1 file="[Dis1_T2]" scale=1 show_if=always x="[Dis1_T2X]" y="[Dis1_T2Y]" z_index=0
	draw image center=1 file="[Dis1_T3]" scale=1 show_if=always x="[Dis1_T3X]" y="[Dis1_T3Y]" z_index=0

define sketchpad Display2
	set start_response_interval no
	set reset_variables no
	set duration "[Dis2_Dur]"
	set description "Displays stimuli"
	draw image center=1 file="[Dis2_T1]" scale=1 show_if=always x="[Dis2_T1X]" y="[Dis2_T1Y]" z_index=0
	draw image center=1 file="[Dis2_T2]" scale=1 show_if=always x="[Dis2_T2X]" y="[Dis2_T2Y]" z_index=0
	draw image center=1 file="[Dis2_T3]" scale=1 show_if=always x="[Dis2_T3X]" y="[Dis2_T3Y]" z_index=0

define logger ID_logger
	set description "Logs experimental data"
	set auto_log no
	log Condition
	log CorrectResponse
	log response_time
	log response
	log datetime
	log experiment_file
	log Dis1_Sti
	log Dis1_Location
	log Dis2_Sti
	log Dis2_Location

define form_text_input StudentID
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "Student ID"
	set form_question "Please type your student ID. When you finish, please press enter to continue."
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define loop TrialList
	set source_file ""
	set source table
	set repeat 4
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Dis1_Sti Bar
	setcycle 0 Dis2_Sti Square
	setcycle 0 Dis1_Location center
	setcycle 0 Dis2_Location "L&R"
	setcycle 0 Dis1_T1 "none.jpg"
	setcycle 0 Dis1_T2 "bar.jpg"
	setcycle 0 Dis1_T3 "none.jpg"
	setcycle 0 Dis2_T1 "square.jpg"
	setcycle 0 Dis2_T2 "none.jpg"
	setcycle 0 Dis2_T3 "square.jpg"
	setcycle 0 Dis1_Dur 120
	setcycle 0 Dis2_Dur 120
	setcycle 0 Dis1_T1X 0
	setcycle 0 Dis1_T1Y 0
	setcycle 0 Dis1_T2X 0
	setcycle 0 Dis1_T2Y -200
	setcycle 0 Dis1_T3X 0
	setcycle 0 Dis1_T3Y 0
	setcycle 0 Dis2_T1X -250
	setcycle 0 Dis2_T1Y -200
	setcycle 0 Dis2_T2X 0
	setcycle 0 Dis2_T2Y 0
	setcycle 0 Dis2_T3X 250
	setcycle 0 Dis2_T3Y -200
	setcycle 0 Condition Inward
	setcycle 0 CorrectResponse G
	setcycle 1 Dis1_Sti Square
	setcycle 1 Dis2_Sti Bar
	setcycle 1 Dis1_Location "L&R"
	setcycle 1 Dis2_Location center
	setcycle 1 Dis1_T1 "square.jpg"
	setcycle 1 Dis1_T2 "none.jpg"
	setcycle 1 Dis1_T3 "square.jpg"
	setcycle 1 Dis2_T1 "none.jpg"
	setcycle 1 Dis2_T2 "bar.jpg"
	setcycle 1 Dis2_T3 "none.jpg"
	setcycle 1 Dis1_Dur 120
	setcycle 1 Dis2_Dur 120
	setcycle 1 Dis1_T1X -250
	setcycle 1 Dis1_T1Y -200
	setcycle 1 Dis1_T2X 0
	setcycle 1 Dis1_T2Y 0
	setcycle 1 Dis1_T3X 250
	setcycle 1 Dis1_T3Y -200
	setcycle 1 Dis2_T1X 0
	setcycle 1 Dis2_T1Y 0
	setcycle 1 Dis2_T2X 0
	setcycle 1 Dis2_T2Y -200
	setcycle 1 Dis2_T3X 0
	setcycle 1 Dis2_T3Y 0
	setcycle 1 Condition Outward
	setcycle 1 CorrectResponse J
	setcycle 2 Dis1_Sti "Bar&Square"
	setcycle 2 Dis2_Sti "Bar&Square"
	setcycle 2 Dis1_Location BSB
	setcycle 2 Dis2_Location BSB
	setcycle 2 Dis1_T1 "square.jpg"
	setcycle 2 Dis1_T2 "bar.jpg"
	setcycle 2 Dis1_T3 "square.jpg"
	setcycle 2 Dis2_T1 "square.jpg"
	setcycle 2 Dis2_T2 "bar.jpg"
	setcycle 2 Dis2_T3 "square.jpg"
	setcycle 2 Dis1_Dur 60
	setcycle 2 Dis2_Dur 60
	setcycle 2 Dis1_T1X -250
	setcycle 2 Dis1_T1Y -200
	setcycle 2 Dis1_T2X 0
	setcycle 2 Dis1_T2Y -200
	setcycle 2 Dis1_T3X 250
	setcycle 2 Dis1_T3Y -200
	setcycle 2 Dis2_T1X -250
	setcycle 2 Dis2_T1Y -200
	setcycle 2 Dis2_T2X 0
	setcycle 2 Dis2_T2Y -200
	setcycle 2 Dis2_T3X 250
	setcycle 2 Dis2_T3Y -200
	setcycle 2 Condition Simultaneous
	setcycle 2 CorrectResponse H
	run trial_sequence

define sketchpad blank
	set duration 500
	set description "Displays stimuli"

define sketchpad blank_1
	set duration 500
	set description "Displays stimuli"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions always
	run trials always
	run finished always

define sketchpad finished
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="The experiment is finished<br /><br />Thank you for participating!<br /><br />Press any key to exit" x=0 y=0 z_index=0

define sketchpad fixation
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=30 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sequence instructions
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run StudentID always
	run ID_logger always
	run instructions_1 always
	run instructions_2 always
	run wait_space always
	run blank_1 always

define sketchpad instructions_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="You will see a series of trials,each consisting of <br />two small squares and a horizontal bar.<br /><br />Your task is to determine <br />whether there is motion in the horizontal bar,<br />and if there is, whether the motion is<br />inward (towards the center) or <br />outward (towards the sides).<br />" x=24 y=-73 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Please press space to continue." x=-12 y=216 z_index=0

define sketchpad instructions_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Press the ‘G’ key if the motion is inward,<br />and the ‘J’ key if it is outward.<br />If there is no motion, press the ‘H’ key.<br />Please focus on the fixation cross at all times." x=7 y=-98 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="When you are ready, <br />please press space to start." x=0 y=256 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush no
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response CorrectResponse
	set allowed_responses "g;h;j"

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log Condition
	log CorrectResponse
	log response_time
	log response
	log datetime
	log experiment_file
	log Dis1_Sti
	log Dis1_Location
	log Dis2_Sti
	log Dis2_Location

define sketchpad resp
	set duration 0
	set description "Displays stimuli"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run Display1 always
	run Display2 always
	run resp always
	run keyboard_response always
	run logger always
	run blank always

define sequence trials
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run TrialList always

define keyboard_response wait_space
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

